PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = (1024, 768)
  color = $(-1.0000, -1.0000, -1.0000)
  expName = Cheese
  eyetracker = eyetracker.hw.mouse.EyeTracker
  keyboardBackend = ioHub
  mgBlink = ['MIDDLE_BUTTON']
  mgMove = CONTINUOUS
  mgSaccade = 0.5
  runMode = 1
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Routines
  Routine cheese
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    TextComponent text
      font [set every frame] = Arial
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = Which one are you going to buy?
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    ImageComponent ambewela
      image [set every repeat] = ambewelacheese.jpg
      pos = (-0.6, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent kothmale
      image [set every repeat] = kothmale cheese.jpg
      pos = (-0.3, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent happycow
      image [set every repeat] = happycow.jpeg
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent kraft
      image [set every repeat] = Kraft cheese.jpeg
      pos = (0.3, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent richlife
      image [set every repeat] = richlifecheese.jpg
      pos = (0.6, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.02
      pos = (-0.6, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Ambewela Cheese
        100g
        Rs 520
        20 % OFF
        New Price - Rs 416
    TextComponent text_3
      letterHeight = 0.02
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Kothmale Cheddar
        250 g
        Rs 1300
    TextComponent text_4
      letterHeight = 0.02
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        HappyCow Cheese
        340 g
        Rs 1200
    TextComponent text_5
      letterHeight = 0.02
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Kraft Cheddar Cheese
        250 g
        Rs 2590
    TextComponent text_6
      letterHeight = 0.02
      pos = (0.6, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Rich Life Cheddar Cheese
        100 g
        Rs 625
    MouseComponent mouse
      clickable = ambewela,kothmale,happycow,kraft,richlife
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    EyetrackerRecordComponent etRecord
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = False
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Butter
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    TextComponent text_7
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Which one are you going to buy ?
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    ImageComponent highlandYoghurt
      image = Highland yp.jpg
      pos = (-0.3, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent anchoryoghurt
      image = anchor youghurt.jpg
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent ambewelayoghurt
      image = ambewela yoghurt.jpg
      pos = (0.3, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent pelawatteyoghurt
      image = pelawatteypughurt.jpeg
      pos = (0.6, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_8
      letterHeight = 0.02
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Highland Yoghurt
                 80g
                Rs 70
    TextComponent text_9
      letterHeight = 0.02
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Anchor Yoghurt
             80 g
           Rs 70
    TextComponent text_10
      letterHeight = 0.02
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Ambewela Yoghurt
              80 g
             Rs 70
    TextComponent text_11
      letterHeight = 0.02
      pos = (0.6, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Pelawatte Yoghurt
               80 g
              Rs  50
    MouseComponent mouse_2
      clickable = highlandYoghurt,anchoryoghurt,ambewelayoghurt,pelawatteyoghurt
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    EyetrackerRecordComponent etRecord_2
      actionType = Stop Only
      startVal [time (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = False
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  Routine Coocking_oil
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    TextComponent text_12
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Which one are you going to buy?
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    ImageComponent fortune
      image = fortune.jpg
      pos = (-0.5, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent marina
      image = marina.jpeg
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent Njoy
      image = Njoy.jpg
      pos = (0.5, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_13
      letterHeight = 0.02
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Fortune Coconut Oil
                     1 L
                  Rs 1390
    TextComponent text_14
      letterHeight = 0.02
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Marina Cooking Oil
               675 ML
               Rs 1450
    TextComponent text_15
      letterHeight = 0.02
      pos = (0.3, -0.5)
      startVal [time (s)] = 0.0
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      text:
        N Joy Coconut Oil
                   1 L
                 Rs 840
    MouseComponent mouse_3
      clickable = fortune , marina , Njoy
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    EyetrackerRecordComponent etRecord_3
      actionType = Stop Only
      startVal [time (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = False
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  Routine Chocolate_
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    TextComponent text_instr
      letterHeight = 0.04
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      text = $"This is a template" + " \n on how to use" + "\n the text component" + " \n to present instructions."
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    ImageComponent kandos
      image = Kandos.jpeg
      pos = (-0.4, 0)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    ImageComponent ritzbury
      image = ritzbury.jpg
      pos = (-0.1, 0)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    ImageComponent revello
      image = revello.jpg
      pos = (0.2, 0)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    ImageComponent cadbury
      image = cadbury.jpg
      pos = (0.5, 0)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_4
      clickable = kandos, ritzbury, revello, cadbury
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    EyetrackerRecordComponent etRecord_4
      actionType = Stop Only
      startVal [time (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = False
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    TextComponent text_20
      letterHeight = 0.02
      pos = (-0.4, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Kandos Chocolate
                90 g
            Rs  600
    TextComponent text_21
      letterHeight = 0.02
      pos = (-0.1, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Ritzbury Milk Chococlate
                       90 g
                    Rs 200
    TextComponent text_22
      letterHeight = 0.02
      pos = (0.2, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Revello Milk Chocolate
                     100g
                     Rs 690
    TextComponent text_23
      letterHeight = 0.02
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Cadbury Milk Chocolate
                      135 g
                     Rs 1250
  Routine sausage
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    TextComponent text_instr_2
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Which one are going to buy
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    ImageComponent goldi
      image = goldi.jpg
      pos = (-0.4, 0)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    ImageComponent elephanthouse
      image = elephanthousre.jpg
      pos = (0.1, 0)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    ImageComponent krest
      image = krest.jpg
      pos = (0.2, 0)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    ImageComponent pussalla
      image = pussalla.jpeg
      pos = (0.5, 0)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_5
      clickable = goldi, elephanthouse, krest, pussalla
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_16
      letterHeight = 0.02
      pos = (-0.4, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Goldi Chicken Sausage
              250 g
             Rs 640
    TextComponent text_17
      letterHeight = 0.02
      pos = (-0.1, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Elephant house Chicken Sausage
                         250 g
                      Rs 1820
    TextComponent text_18
      letterHeight = 0.02
      pos = (0.2, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Keels Krest Chicken Sausage
                       250 g
                      Rs 820
    TextComponent text_19
      letterHeight = 0.02
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Pussalla Chicken Sausage
                       250 g
    KeyboardComponent key_resp_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    EyetrackerRecordComponent etRecord_5
      actionType = Stop Only
      startVal [time (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = False
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Flow
  Routine sausage
  Routine Chocolate_
  Routine Coocking_oil
  Routine cheese
  Routine Butter
